CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunCellpose:[module_num:5|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
    Select the input image:DNA
    Expected object diameter:0
    Detection mode:cyto
    Name the output object:Nuclei
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.8
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

MeasureGranularity:[module_num:6|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
    Select images to measure:DNA
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:DNA
    Select objects to measure:Nuclei

MeasureImageIntensity:[module_num:8|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
    Select images to measure:DNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Nuclei
    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:10|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
    Select images to measure:DNA
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:12|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
    Select images to measure:DNA
    Select objects to measure:Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/Github/IDR_stream
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|Location_CenterMassIntensity_Y_DNA,Nuclei|Location_CenterMassIntensity_Z_DNA,Nuclei|Location_CenterMassIntensity_X_DNA,Nuclei|Location_MaxIntensity_Y_DNA,Nuclei|Location_MaxIntensity_X_DNA,Nuclei|Location_MaxIntensity_Z_DNA,Nuclei|Location_Center_Z,Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|AreaShape_Zernike_4_4,Nuclei|AreaShape_Zernike_4_0,Nuclei|AreaShape_Zernike_4_2,Nuclei|AreaShape_Zernike_6_6,Nuclei|AreaShape_Zernike_6_4,Nuclei|AreaShape_Zernike_6_0,Nuclei|AreaShape_Zernike_6_2,Nuclei|AreaShape_Zernike_3_1,Nuclei|AreaShape_Zernike_3_3,Nuclei|AreaShape_Zernike_8_6,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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